<?xml version='1.0'?>
<model cmeta:id="cytokine_release" name="cytokine_release" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
    <!--
*******************************************************
***         U   N   I   T   S                       ***
*******************************************************
-->
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="nM">
        <unit prefix="nano" units="mole"/>
        <unit exponent="-1" units="liter"/>
    </units>
    <units name="flux">
        <unit units="nM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="second_order_rate_constant">
        <unit exponent="-1" units="nM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="first_order_rate_constant">
        <unit exponent="-1" units="s"/>
    </units>
    <!--
*********************************************************
***       C   O   M   P   O   N   E   N   T   S       ***
*********************************************************
-->
    <component name="IFN_release">
        <variable name="time" public_interface="in" units="s"/>
        <variable name="k_f101" public_interface="in" units="first_order_rate_constant"/>
        <variable name="IFN_c" public_interface="in" units="nM"/>
        <variable name="IFN_released" public_interface="in" units="nM"/>
        <variable name="vm_vcw" public_interface="in" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>IFN_released</ci>
                </apply>
                <apply>
                    <times/>
                    <ci>k_f101</ci>
                    <ci>IFN_c</ci>
                </apply>
            </apply>
        </math>
        <!--ode(IFN_released, time) = IFN_c/vm_vcw;-->
    </component>
    <component name="TNF_release">
        <variable name="time" public_interface="in" units="s"/>
        <variable name="k_f100" public_interface="in" units="first_order_rate_constant"/>
        <variable name="TNF_c" public_interface="in" units="nM"/>
        <variable name="TNF_released" public_interface="in" units="nM"/>
        <variable name="vm_vcw" public_interface="in" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>TNF_released</ci>
                </apply>
                <apply>
                    <times/>
                    <ci>k_f100</ci>
                    <ci>TNF_c</ci>
                </apply>
            </apply>
        </math>
        <!--ode(TNF_released, time) = TNF_c/vm_vcw;-->
    </component>
    <component name="GSMCSF_release">
        <variable name="time" public_interface="in" units="s"/>
        <variable name="k_f102" public_interface="in" units="first_order_rate_constant"/>
        <variable name="GMCSF_c" public_interface="in" units="nM"/>
        <variable name="GMCSF_released" public_interface="in" units="nM"/>
        <variable name="vm_vcw" public_interface="in" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>GMCSF_released</ci>
                </apply>
                <apply>
                    <times/>
                    <ci>k_f102</ci>
                    <ci>GMCSF_c</ci>
                </apply>
            </apply>
        </math>
        <!--ode(GMCSF_released, time) = GMCSF_c/vm_vcw;-->
    </component>
</model>
