<?xml version='1.0'?>
<model name="MEK_hatakeyama" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#">
    <!--
*******************************************************
***         U   N   I   T   S                       ***
*******************************************************
-->
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="nM">
        <unit prefix="nano" units="mole"/>
        <unit exponent="-1" units="litre"/>
    </units>
    <units name="flux">
        <unit units="nM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="second_order_rate_constant">
        <unit exponent="-1" units="nM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="first_order_rate_constant">
        <unit exponent="-1" units="s"/>
    </units>
    <component name="MEK">
        <variable name="time" public_interface="in" units="s"/>
        <!-- Parameters-->
        <variable name="kf15" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k15" public_interface="in" units="nM"/>
        <variable name="kf16" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k16" public_interface="in" units="nM"/>
        <variable name="kf17" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k17" public_interface="in" units="nM"/>
        <variable name="kf18" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k18" public_interface="in" units="nM"/>
        <variable name="k31" public_interface="in" units="nM"/>
        <variable name="k33" public_interface="in" units="nM"/>
        <!-- Variables-->
        <variable name="RAFstar" public_interface="in" units="nM"/>
        <variable name="PP2A" public_interface="in" units="nM"/>
        <variable name="MEKPP" public_interface="in" units="nM"/>
        <variable name="MEKP" public_interface="in" units="nM"/>
        <variable name="MEK" public_interface="in" units="nM"/>
        <variable name="Akt_PIP" public_interface="in" units="nM"/>
        <variable name="Akt_PIPP" public_interface="in" units="nM"/>
        <variable initial_value="1" name="one" units="dimensionless"/>
        <variable name="J_MEK" public_interface="in" units="flux"/>
        <variable name="J_MEKPP" public_interface="in" units="flux"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J_MEK</ci>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <apply>
                                <minus/>
                                <ci>kf15</ci>
                            </apply>
                            <ci>RAFstar</ci>
                            <ci>MEK</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <apply>
                                <times/>
                                <ci>k15</ci>
                                <apply>
                                    <plus/>
                                    <ci>one</ci>
                                    <apply>
                                        <divide/>
                                        <ci>MEKP</ci>
                                        <ci>k17</ci>
                                    </apply>
                                </apply>
                            </apply>
                            <ci>MEK</ci>
                        </apply>
                    </apply>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>kf16</ci>
                            <ci>PP2A</ci>
                            <ci>MEKP</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <apply>
                                <times/>
                                <ci>k16</ci>
                                <apply>
                                    <plus/>
                                    <ci>one</ci>
                                    <apply>
                                        <divide/>
                                        <ci>MEKPP</ci>
                                        <ci>k18</ci>
                                    </apply>
                                    <apply>
                                        <divide/>
                                        <ci>Akt_PIP</ci>
                                        <ci>k31</ci>
                                    </apply>
                                    <apply>
                                        <divide/>
                                        <ci>Akt_PIPP</ci>
                                        <ci>k33</ci>
                                    </apply>
                                </apply>
                            </apply>
                            <ci>MEKP</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <!--ode(MEK, time) = -kf15*RAFstar*MEK/(k15*(one+MEKP/k17)+MEK)+kf16*PP2A*MEKP/(k16*(one+MEKPP/k18+Akt_PIP/k31+Akt_PIPP/k33)+MEKP);-->
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>MEKP</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <apply>
                                <divide/>
                                <apply>
                                    <times/>
                                    <ci>kf15</ci>
                                    <ci>RAFstar</ci>
                                    <ci>MEK</ci>
                                </apply>
                                <apply>
                                    <plus/>
                                    <apply>
                                        <times/>
                                        <ci>k15</ci>
                                        <apply>
                                            <plus/>
                                            <ci>one</ci>
                                            <apply>
                                                <divide/>
                                                <ci>MEKP</ci>
                                                <ci>k17</ci>
                                            </apply>
                                        </apply>
                                    </apply>
                                    <ci>MEK</ci>
                                </apply>
                            </apply>
                            <apply>
                                <divide/>
                                <apply>
                                    <times/>
                                    <ci>kf16</ci>
                                    <ci>PP2A</ci>
                                    <ci>MEKP</ci>
                                </apply>
                                <apply>
                                    <plus/>
                                    <apply>
                                        <times/>
                                        <ci>k16</ci>
                                        <apply>
                                            <plus/>
                                            <ci>one</ci>
                                            <apply>
                                                <divide/>
                                                <ci>MEKPP</ci>
                                                <ci>k18</ci>
                                            </apply>
                                            <apply>
                                                <divide/>
                                                <ci>Akt_PIP</ci>
                                                <ci>k31</ci>
                                            </apply>
                                            <apply>
                                                <divide/>
                                                <ci>Akt_PIPP</ci>
                                                <ci>k33</ci>
                                            </apply>
                                        </apply>
                                    </apply>
                                    <ci>MEKP</ci>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <ci>kf17</ci>
                                <ci>RAFstar</ci>
                                <ci>MEKP</ci>
                            </apply>
                            <apply>
                                <plus/>
                                <apply>
                                    <times/>
                                    <ci>k17</ci>
                                    <apply>
                                        <plus/>
                                        <ci>one</ci>
                                        <apply>
                                            <divide/>
                                            <ci>MEK</ci>
                                            <ci>k15</ci>
                                        </apply>
                                    </apply>
                                </apply>
                                <ci>MEKP</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>kf18</ci>
                            <ci>PP2A</ci>
                            <ci>MEKPP</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <apply>
                                <times/>
                                <ci>k18</ci>
                                <apply>
                                    <plus/>
                                    <ci>one</ci>
                                    <apply>
                                        <divide/>
                                        <ci>MEKP</ci>
                                        <ci>k16</ci>
                                    </apply>
                                    <apply>
                                        <divide/>
                                        <ci>Akt_PIP</ci>
                                        <ci>k31</ci>
                                    </apply>
                                    <apply>
                                        <divide/>
                                        <ci>Akt_PIPP</ci>
                                        <ci>k33</ci>
                                    </apply>
                                </apply>
                            </apply>
                            <ci>MEKPP</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>MEKPP</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <ci>kf17</ci>
                                <ci>RAFstar</ci>
                                <ci>MEKP</ci>
                            </apply>
                            <apply>
                                <plus/>
                                <apply>
                                    <times/>
                                    <ci>k17</ci>
                                    <apply>
                                        <plus/>
                                        <ci>one</ci>
                                        <apply>
                                            <divide/>
                                            <ci>MEK</ci>
                                            <ci>k15</ci>
                                        </apply>
                                    </apply>
                                </apply>
                                <ci>MEKP</ci>
                            </apply>
                        </apply>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <ci>kf18</ci>
                                <ci>PP2A</ci>
                                <ci>MEKPP</ci>
                            </apply>
                            <apply>
                                <plus/>
                                <apply>
                                    <times/>
                                    <ci>k18</ci>
                                    <apply>
                                        <plus/>
                                        <ci>one</ci>
                                        <apply>
                                            <divide/>
                                            <ci>MEKP</ci>
                                            <ci>k16</ci>
                                        </apply>
                                        <apply>
                                            <divide/>
                                            <ci>Akt_PIP</ci>
                                            <ci>k31</ci>
                                        </apply>
                                        <apply>
                                            <divide/>
                                            <ci>Akt_PIPP</ci>
                                            <ci>k33</ci>
                                        </apply>
                                    </apply>
                                </apply>
                                <ci>MEKPP</ci>
                            </apply>
                        </apply>
                    </apply>
                    <ci>J_MEKPP</ci>
                </apply>
            </apply>
        </math>
    </component>
</model>
