<?xml version='1.0'?>
<model name="PI3K_hatakeyama" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#">
    <!--
*******************************************************
***         U   N   I   T   S                       ***
*******************************************************
-->
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="um">
        <unit prefix="micro" units="mole"/>
        <unit exponent="-1" units="litre"/>
    </units>
    <units name="flux">
        <unit units="nm"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="second_order_rate_constant">
        <unit exponent="-1" units="nm"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="first_order_rate_constant">
        <unit exponent="-1" units="s"/>
    </units>
    <component name="PI3K">
        <variable name="time" public_interface="in" units="s"/>
        <!-- Parameters-->
        <variable name="kf1" public_interface="in" units="second_order_rate_constant"/>
        <variable name="kb1" public_interface="in" units="first_order_rate_constant"/>
        <variable name="kf2" public_interface="in" units="second_order_rate_constant"/>
        <variable name="kb2" public_interface="in" units="first_order_rate_constant"/>
        <variable name="kf3" public_interface="in" units="first_order_rate_constant"/>
        <variable name="kb3" public_interface="in" units="first_order_rate_constant"/>
        <variable name="kf34" public_interface="in" units="first_order_rate_constant"/>
        <variable name="kb34" public_interface="in" units="first_order_rate_constant"/>
        <variable name="V4" public_interface="in" units="flux"/>
        <variable name="k4" public_interface="in" units="nm"/>
        <variable name="kf5" public_interface="in" units="second_order_rate_constant"/>
        <variable name="kb5" public_interface="in" units="first_order_rate_constant"/>
        <variable name="kf6" public_interface="in" units="first_order_rate_constant"/>
        <variable name="kb6" public_interface="in" units="first_order_rate_constant"/>
        <variable name="kf7" public_interface="in" units="first_order_rate_constant"/>
        <variable name="kb7" public_interface="in" units="first_order_rate_constant"/>
        <variable name="kf8" public_interface="in" units="first_order_rate_constant"/>
        <variable name="kb8" public_interface="in" units="second_order_rate_constant"/>
        <variable name="kf9" public_interface="in" units="first_order_rate_constant"/>
        <variable name="kb9" public_interface="in" units="second_order_rate_constant"/>
        <variable name="V10" public_interface="in" units="flux"/>
        <variable name="k10" public_interface="in" units="nm"/>
        <variable name="kf23" public_interface="in" units="second_order_rate_constant"/>
        <variable name="kb23" public_interface="in" units="first_order_rate_constant"/>
        <variable name="kf24" public_interface="in" units="first_order_rate_constant"/>
        <variable name="kb24" public_interface="in" units="first_order_rate_constant"/>
        <variable name="kf25" public_interface="in" units="first_order_rate_constant"/>
        <variable name="kb25" public_interface="in" units="second_order_rate_constant"/>
        <variable name="V26" public_interface="in" units="flux"/>
        <variable name="k26" public_interface="in" units="nm"/>
        <!-- Variables-->
        <variable name="R" public_interface="in" units="nm"/>
        <variable name="Shc" public_interface="in" units="nm"/>
        <variable name="PI3K" public_interface="in" units="nm"/>
        <variable name="HRG" public_interface="in" units="nm"/>
        <variable name="R_HRG" public_interface="in" units="nm"/>
        <variable name="R_HRG2" public_interface="in" units="nm"/>
        <variable name="Internalisation" public_interface="in" units="nm"/>
        <variable name="RP" public_interface="in" units="nm"/>
        <variable name="R_Shc" public_interface="in" units="nm"/>
        <variable name="R_ShP" public_interface="in" units="nm"/>
        <variable name="ShP" public_interface="in" units="nm"/>
        <variable name="R_ShGS" public_interface="in" units="nm"/>
        <variable name="ShGS" public_interface="in" units="nm"/>
        <variable name="GS" public_interface="in" units="nm"/>
        <variable name="R_PI3K" public_interface="in" units="nm"/>
        <variable name="R_PI3Kstar" public_interface="in" units="nm"/>
        <variable initial_value="0" name="PI3Kstar" private_interface="out" public_interface="in" units="nm"/>
        <variable initial_value="2" name="two" units="dimensionless"/>
        <!-- Equations-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>R</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <times/>
                        <apply>
                            <minus/>
                            <ci>kf1</ci>
                        </apply>
                        <ci>R</ci>
                        <ci>HRG</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>kb1</ci>
                        <ci>R_HRG</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>HRG</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <times/>
                        <apply>
                            <minus/>
                            <ci>kf1</ci>
                        </apply>
                        <ci>R</ci>
                        <ci>HRG</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>kb1</ci>
                        <ci>R_HRG</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>R_HRG</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf1</ci>
                            <ci>R</ci>
                            <ci>HRG</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb1</ci>
                            <ci>R_HRG</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>two</ci>
                        <apply>
                            <minus/>
                            <apply>
                                <times/>
                                <ci>kf2</ci>
                                <ci>R_HRG</ci>
                                <ci>R_HRG</ci>
                            </apply>
                            <apply>
                                <times/>
                                <ci>kb2</ci>
                                <ci>R_HRG2</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>R_HRG2</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <apply>
                                <times/>
                                <ci>kf2</ci>
                                <ci>R_HRG</ci>
                                <ci>R_HRG</ci>
                            </apply>
                            <apply>
                                <times/>
                                <ci>kb2</ci>
                                <ci>R_HRG2</ci>
                            </apply>
                        </apply>
                        <apply>
                            <minus/>
                            <apply>
                                <times/>
                                <ci>kf3</ci>
                                <ci>R_HRG2</ci>
                            </apply>
                            <apply>
                                <times/>
                                <ci>kb3</ci>
                                <ci>RP</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>V4</ci>
                            <ci>RP</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <ci>k4</ci>
                            <ci>RP</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>RP</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <plus/>
                            <apply>
                                <minus/>
                                <apply>
                                    <minus/>
                                    <apply>
                                        <plus/>
                                        <apply>
                                            <minus/>
                                            <apply>
                                                <minus/>
                                                <apply>
                                                    <minus/>
                                                    <apply>
                                                        <times/>
                                                        <ci>kf3</ci>
                                                        <ci>R_HRG2</ci>
                                                    </apply>
                                                    <apply>
                                                        <times/>
                                                        <ci>kb3</ci>
                                                        <ci>RP</ci>
                                                    </apply>
                                                </apply>
                                                <apply>
                                                    <divide/>
                                                    <apply>
                                                        <times/>
                                                        <ci>V4</ci>
                                                        <ci>RP</ci>
                                                    </apply>
                                                    <apply>
                                                        <plus/>
                                                        <ci>k4</ci>
                                                        <ci>RP</ci>
                                                    </apply>
                                                </apply>
                                            </apply>
                                            <apply>
                                                <minus/>
                                                <apply>
                                                    <times/>
                                                    <ci>kf5</ci>
                                                    <ci>RP</ci>
                                                    <ci>Shc</ci>
                                                </apply>
                                                <apply>
                                                    <times/>
                                                    <ci>kb5</ci>
                                                    <ci>R_Shc</ci>
                                                </apply>
                                            </apply>
                                        </apply>
                                        <apply>
                                            <times/>
                                            <ci>kf8</ci>
                                            <ci>R_ShP</ci>
                                        </apply>
                                    </apply>
                                    <apply>
                                        <times/>
                                        <ci>kb8</ci>
                                        <ci>ShGS</ci>
                                        <ci>RP</ci>
                                    </apply>
                                </apply>
                                <apply>
                                    <minus/>
                                    <apply>
                                        <times/>
                                        <ci>kf23</ci>
                                        <ci>RP</ci>
                                        <ci>PI3K</ci>
                                    </apply>
                                    <apply>
                                        <times/>
                                        <ci>kb23</ci>
                                        <ci>R_PI3K</ci>
                                    </apply>
                                </apply>
                            </apply>
                            <apply>
                                <times/>
                                <ci>kf25</ci>
                                <ci>R_PI3Kstar</ci>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb25</ci>
                            <ci>RP</ci>
                            <ci>PI3Kstar</ci>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf34</ci>
                            <ci>RP</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb34</ci>
                            <ci>Internalisation</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>Internalisation</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>kf34</ci>
                        <ci>RP</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>kb34</ci>
                        <ci>Internalisation</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>R_Shc</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf5</ci>
                            <ci>RP</ci>
                            <ci>Shc</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb5</ci>
                            <ci>R_Shc</ci>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf6</ci>
                            <ci>R_Shc</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb6</ci>
                            <ci>R_ShP</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>Shc</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <apply>
                                <times/>
                                <ci>kf5</ci>
                                <ci>RP</ci>
                                <ci>Shc</ci>
                            </apply>
                            <apply>
                                <times/>
                                <ci>kb5</ci>
                                <ci>R_Shc</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>V10</ci>
                            <ci>ShP</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <ci>k10</ci>
                            <ci>ShP</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>R_ShP</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf6</ci>
                            <ci>R_Shc</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb6</ci>
                            <ci>R_ShP</ci>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf7</ci>
                            <ci>R_ShP</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb7</ci>
                            <ci>R_ShGS</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>GS</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <plus/>
                        <apply>
                            <minus/>
                            <apply>
                                <minus/>
                                <apply>
                                    <times/>
                                    <ci>kf7</ci>
                                    <ci>R_ShP</ci>
                                </apply>
                                <apply>
                                    <times/>
                                    <ci>kb7</ci>
                                    <ci>R_ShGS</ci>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kf9</ci>
                            <ci>ShGS</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>kb9</ci>
                        <ci>GS</ci>
                        <ci>ShP</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>ShP</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf9</ci>
                            <ci>ShGS</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb9</ci>
                            <ci>GS</ci>
                            <ci>ShP</ci>
                        </apply>
                    </apply>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>V10</ci>
                            <ci>ShP</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <ci>k10</ci>
                            <ci>ShP</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>R_ShGS</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf7</ci>
                            <ci>R_ShP</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb7</ci>
                            <ci>R_ShGS</ci>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf8</ci>
                            <ci>R_ShP</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb8</ci>
                            <ci>ShGS</ci>
                            <ci>RP</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>ShGS</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf8</ci>
                            <ci>R_ShP</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb8</ci>
                            <ci>ShGS</ci>
                            <ci>RP</ci>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf9</ci>
                            <ci>ShGS</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb9</ci>
                            <ci>GS</ci>
                            <ci>ShP</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>R_PI3K</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf23</ci>
                            <ci>RP</ci>
                            <ci>PI3K</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb23</ci>
                            <ci>R_PI3K</ci>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf24</ci>
                            <ci>R_PI3K</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb24</ci>
                            <ci>R_PI3Kstar</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>PI3K</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <apply>
                                <times/>
                                <ci>kf23</ci>
                                <ci>RP</ci>
                                <ci>PI3K</ci>
                            </apply>
                            <apply>
                                <times/>
                                <ci>kb23</ci>
                                <ci>R_PI3K</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>V26</ci>
                            <ci>PI3Kstar</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <ci>k26</ci>
                            <ci>PI3Kstar</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>R_PI3Kstar</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf24</ci>
                            <ci>R_PI3K</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb24</ci>
                            <ci>R_PI3Kstar</ci>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf25</ci>
                            <ci>R_PI3Kstar</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb25</ci>
                            <ci>RP</ci>
                            <ci>PI3Kstar</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>PI3Kstar</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>kf25</ci>
                            <ci>R_PI3Kstar</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>kb25</ci>
                            <ci>RP</ci>
                            <ci>PI3Kstar</ci>
                        </apply>
                    </apply>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>V26</ci>
                            <ci>PI3Kstar</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <ci>k26</ci>
                            <ci>PI3Kstar</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
</model>
